Application:Speller%20Targets matrix TargetDefinitions= 9 { Display Enter Display%20Size Icon%20File Sound Intensified%20Icon } A A 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Rompecabezas/Triangulos/img3.png % % B B 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Rompecabezas/Triangulos/img6.png % % C C 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Rompecabezas/Triangulos/img8.png % % D D 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Rompecabezas/Triangulos/img1.png % % E E 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Rompecabezas/Triangulos/img5.png % % F F 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Rompecabezas/Triangulos/img4.png % % G G 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Rompecabezas/Triangulos/img2.png % % H H 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Rompecabezas/Triangulos/img9.png % % I I 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Rompecabezas/Triangulos/img7.png % % // speller target properties